PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = testexpt
  Screen = 1
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Routines
  Routine trial
    MovieComponent movie
      movie [set every repeat] = $videoFile
      stopVal [duration (s)] = 30
      forceEndRoutine = False
      No audio = True
      startVal [time (s)] = 0.0
      backend = moviepy
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    ImageComponent image_1
      stopVal [duration (s)] = 30
      pos [set every frame] = (-0.85, -0.85)
      startVal [time (s)] = 0.0
      image [set every frame] = $image1File
      size [set every frame] = (0.15, 0.2)
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    ImageComponent image_2
      stopVal [duration (s)] = 30
      pos [set every frame] = (-0.85, -0.65)
      startVal [time (s)] = 0.0
      image [set every frame] = $image2File
      size [set every frame] = (0.15, 0.2)
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    ImageComponent image
      stopVal [duration (s)] = 30
      pos [set every frame] = (-0.85, -0.45)
      startVal [time (s)] = 0.0
      image [set every frame] = $image3File
      size [set every frame] = (0.15, 0.2)
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    MovieComponent movie_2
      movie [set every repeat] = countdown.mp4
      stopVal [duration (s)] = 5
      forceEndRoutine = False
      No audio = True
      startVal [time (s)] = 30
      backend = moviepy
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  Routine instructions
    TextComponent instrText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        In the bottom left corner, robot's goal is specified.

        Press any key to start the experiment
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
    Selected rows = 0:3
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    conditions:
      [{'image2File': u'red.png', 'image1File': u'red.png', 'videoFile': u'video1.mp4', 'image3File': u'red.png'},
      {'image2File': u'red.png', 'image1File': u'blue.png', 'videoFile': u'video1.mp4', 'image3File': u'blue.png'},
      {'image2File': u'blue.png', 'image1File': u'red.png', 'videoFile': u'video1.mp4', 'image3File': u'red.png'},
      {'image2File': u'red.png', 'image1File': u'blue.png', 'videoFile': u'video1.mp4', 'image3File': u'red.png'},
      {'image2File': u'blue.png', 'image1File': u'green.png', 'videoFile': u'video1.mp4', 'image3File': u'red.png'},
      {'image2File': u'green.png', 'image1File': u'red.png', 'videoFile': u'video1.mp4', 'image3File': u'red.png'},
      {'image2File': u'blue.png', 'image1File': u'red.png', 'videoFile': u'video1.mp4', 'image3File': u'green.png'},
      {'image2File': u'red.png', 'image1File': u'green.png', 'videoFile': u'video1.mp4', 'image3File': u'red.png'},
      {'image2File': u'blue.png', 'image1File': u'red.png', 'videoFile': u'video1.mp4', 'image3File': u'green.png'},
      {'image2File': u'green.png', 'image1File': u'red.png', 'videoFile': u'video1.mp4', 'image3File': u'blue.png'}]
    Routine trial
  LoopTerminator trials
